'CR1000 Series Datalogger
' CR 1000x code to conduct sapflux measurements using two thermisters surrounding a heat
' probe located between thermistors
' four Soil moisture content measuring is also included in the code. 

' Code date:  05/23/2017
' Code author:  Code originally from Koong Yi but this version has been
' modified by Nicolas Zegre and Luis Andres Guillen
' This code should be used to TEST field-deployed sensors using the multiplexer and Soil moisture content probes.

'Declare Public Variables
' Tref is reference temp (panel temp); Batt_volt is battery voltage; Mux1(12) is thermocouple
' temperatures from each differential port (H & L)
' VW is volumetriv water content. PA_uS is the conductivity in the soil. 
Public Tref, Batt_Volt, StorePostPulse As Boolean, SoilStore As Boolean
Public Mux1_(14) ' this call multiplexer to public
Public PRE_POST As String * 5 
Public VW_1
Public PA_uS_1
Public VW_2
Public PA_uS_2
Public VW_3
Public PA_uS_3
Public VW_4
Public PA_uS_4
Public AirTC
Public RH
Public T1
Public T2
Public T3
Public T4
Public T5
Public T6
Public ST1
Public ST2


'Define Data Tables
DataTable (HPD_MUX1,1,-1)
	Sample (1,PRE_POST,String)
	Sample (1,Batt_Volt,FP2)
	Sample (1,Tref,FP2)
	Sample (1,T1,FP2)'The following variables are the temperature differences between the two probes at each time step (every 2 seconds). 
	Sample (1,T2,FP2)
	Sample (1,T3,FP2)
	Sample (1,T4,FP2)
	Sample (1,T5,FP2)
	Sample (1,T6,FP2)
EndTable 



DataTable (Soil_Moisture,1,-1)
	Average(1,VW_1,FP2,False) ' this calls the CS616 volumetric water content.
	Average(1,VW_2,FP2,False)
	Average(1,VW_3,FP2,False)
	Average(1,VW_4,FP2,False)
	Average(1,ST1,FP2,False)
	Average(1,ST2,FP2,False)
EndTable

DataTable(Air_T_RH,True,-1)
	Sample(1,AirTC,FP2)
	Sample(1,RH,FP2)
EndTable

'Main Program
BeginProg
	Scan (2,Sec,200,0)
	  SW12(0)
	  Battery (Batt_Volt)
		
		AM25T (Mux1_(),14,mV2_5,1,1,TypeT,Tref,2,3,Vx1,True,5000,_60Hz,1.0,0) ' this calls the AM25T multiplexer
    T1=Mux1_(1) - (Mux1_(2))
	  T2=Mux1_(3)- Mux1_(4)
	  T3=Mux1_(5)- Mux1_(6)
	  T4=Mux1_(7)- Mux1_(8)
		T5=Mux1_(9)- Mux1_(10)
		T6=Mux1_(11)- Mux1_(12)
 		
If TimeIntoInterval (0,1800,Sec) Then ' logs every 30 mins )nz)

		  PRE_POST = "PRE"
		  CallTable HPD_MUX1 ' calls multiplexer instead of datalogger
		  		SW12(1) ' activates heater
		  Delay(0,2,sec) 'generates heat for 2 seconds
		  SW12(0) ' deactivates heater
	
    CS616(PA_uS_1,1,3,4,1,1,0) 	'CS616 Water Content Reflectometer measurements 'VW_1' and 'PA_uS_1' Green to SE 3 and Orange to C4
		VW_1=-0.0663+(-0.0063*PA_uS_1)+(0.0007*PA_uS_1^2)
		CS616(PA_uS_2,1,4,5,1,1,0) 	'CS616 Water Content Reflectometer measurements 'VW_2' and 'PA_uS_2' Green to SE 4 and Orange to C5
		VW_2=-0.0663+(-0.0063*PA_uS_2)+(0.0007*PA_uS_2^2)
		CS616(PA_uS_3,1,5,6,1,1,0) 	'CS616 Water Content Reflectometer measurements 'VW_3' and 'PA_uS_3' Green to SE 5 and Orange to C6
		VW_3=-0.0663+(-0.0063*PA_uS_3)+(0.0007*PA_uS_3^2)
		CS616(PA_uS_4,1,6,7,1,1,0)  'CS616 Water Content Reflectometer measurements 'VW_4' and 'PA_uS_4' Green to SE 6 and Orange to C7
		VW_4=-0.0663+(-0.0063*PA_uS_4)+(0.0007*PA_uS_4^2)
  
    ST1=Mux1_(13)
		ST2=Mux1_(14)

   'HMP50/HMP60 Temperature & Relative Humidity Sensor measurements 'AirTC' and 'RH'
		VoltSe(AirTC,1,mV2500,7,0,0,_50Hz,0.1,-40) 'Black cable of Air sensor to number 7
		VoltSe(RH,1,mV2500,8,0,0,_50Hz,0.1,0) 'White cable of Air sensor to number 8. Clear to the ground by channel 8. Blue to 5V G and Brown to 12V. 
		If (RH>100) AND (RH<108) Then RH=100
		
    SoilStore = True

		EndIf

If TimeIntoInterval(4,1800,Sec)Then
    SoilStore = False
    EndIf

If TimeIntoInterval (6,1800,Sec) Then  'logs every 30 mins (NZ)
		  PRE_POST="POST"
		 
   StorePostPulse = True
		EndIf

If TimeIntoInterval (300,1800,Sec) Then  'logs every 30 mins (NZ)
		  StorePostPulse = False
		EndIf
  
If StorePostPulse Then
		  CallTable HPD_MUX1 ' names table from data collected using multiplexer
		 EndIf
If SoilStore Then
  		CallTable Soil_Moisture 'Calls table to store data. 
		  CallTable Air_T_RH 'Call the tale of air T and RH to store the data. 
    EndIf
  NextScan
EndProg

